// Archivo de descripción de la barra de herramientas: MedUTN_Toolbar
run("Action Bar", "/plugins/ActionBar/MedUTN_Toolbar.txt");
exit;

<line>
// Sección: Mejoramiento de Imagen
<button> 1 line 1
label=Abrir Muestra
arg=<macro>
run("Blobs (25K)");  // Plugin para abrir una imagen de muestra de blobs
</macro>
<button> 2 line 1
label=Desenfoque Gaussiano
arg=<macro>
run("Gaussian Blur...", "sigma=5");  // Aplica desenfoque gaussiano con sigma=5
</macro>
<button> 3 line 1
label=Tabla LUT
arg=<macro>
run("Apply LUT");  // Aplica una tabla LUT a la imagen
</macro>
<button> 4 line 1
label=Optimizar Imagen (Kage)
arg=<macro>
run("Enhance Contrast", "saturated=0.35");
run("Histogram");  // Optimización de imagen mediante histogramas
</macro>
</line>

<line>
// Sección: Extracción de Característica
<button> 1 line 2
label=Detectar Bordes
arg=<macro>
run("Enhance Contrast", "saturated=0.35");
run("Gaussian Blur...", "sigma=2");
run("Find Edges");  // Plugin para detectar bordes en la imagen
</macro>
<button> 2 line 2
label=Graficar Perfil
arg=<macro>
run("Plot Profile");  // Traza un gráfico del perfil de intensidad a lo largo de una línea en la imagen
</macro>
<button> 3 line 2
label=Mejorar Medición
arg=<macro>
run("Set Measurements...", "area mean standard modal min centroid");  // Mejora las opciones de medición
run("Measure");  // Mide áreas, perímetros, etc.
</macro>
<button> 4 line 2
label=Sacar Fondo
arg=<macro>
run("Subtract Background...", "rolling=50");  // Elimina el fondo de la imagen
</macro>
</line>

<line>
// Sección: Segmentación de Imagen - Rotular Regiones Peligrosas
<button> 1 line 3
label=Segmentacion Watershed
arg=<macro>
run("Watershed");  // Aplica el algoritmo de Watershed
</macro>
<button> 2 line 3
label=Rotular Regiones Peligrosas
arg=<macro>
run("Analyze Particles...", "size=100-Infinity display");  // Identifica y rotula regiones en la imagen
</macro>
<button> 3 line 3
label=Segmentar Imagen
arg=<macro>
run("Make Binary");  // Convierte la imagen en binaria
</macro>
<button> 4 line 3
label=Umbral Automatico (Otsu)
arg=<macro>
run("Auto Threshold", "method=Otsu white");  // Utiliza segmentación automática con el método de Otsu
</macro>
</line>

<line>
// Otras funcionalidades
<button> 1 line 4
label=Visor 3D
arg=<macro>
run("3D Viewer");  // Carga un visor 3D para reconstrucción de imágenes en tres dimensiones.
</macro>
<button> 2 line 4
label=Invertir Colores
arg=<macro>
run("Invert");  // Invierte los colores de la imagen
</macro>
<button> 3 line 4
label=Deshacer Ultimo Cambio
arg=<macro>
run("Undo");  // Deshace el último cambio aplicado a la imagen
</macro>
</line>
